PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'group': '["exp","con"]'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  colPriority = {'stimID': 'priority.CRITICAL', 'stimType': 'priority.CRITICAL', 'transparent': 'priority.HIGH', 'idiom': 'priority.HIGH', 'sentPos': 'priority.MEDIUM', 'word': 'priority.MEDIUM', 'readingTimes': 'priority.MEDIUM', 'questionCorrect': 'priority.MEDIUM', 'participantAnswer': 'priority.MEDIUM', 'expName': 'priority.LOW'}
  expName = metaphors
  keyboardBackend = ioHub
  logging level = data
  runMode = 0
  sortColumns = priority
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Routines
  Routine trial
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    CodeComponent trialCode
      Code Type = Auto->JS
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      Begin Routine:
        # clear any previous keypresses
        event.clearEvents()

        # parse stimulus
        words = idiom.split(" ")

        # prepare word display
        sentPos = 0
        stimulus = words[sentPos]

        # initiate clock
        clock = core.Clock()
      Each Frame:
        # listen for keys
        theseKeys = event.getKeys(["space","escape"])
        n = len(theseKeys)
        i = 0

        # action on keypress
        while n > i:
            if theseKeys[i] == "escape":
                # break out of experiment when escape is pressed
                quit()
                break
            elif theseKeys[i] == "space":
                thisExp.addData("readingTimes",clock.getTime())
                thisExp.addData("sentPos", sentPos)
                thisExp.addData("word", stimulus)
                thisExp.nextEntry()
                clock.reset()
                # update sentence position on spacebar press
                sentPos += 1
                if sentPos == len(words):
                    # if end of sentence is reached, exit routine
                    continueRoutine = False
                    break
                stimulus = words[sentPos]
                i += 1
    KeyboardComponent trialKey
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent trialText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $stimulus
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  Routine welcome
    ResourceManagerComponent resourcesWelcome
      actionType = Start and Check
      checkAll = True
      forceEndRoutine = False
      resources = ['resources/idiomStimuli.xlsx', 'resources/practiceStimuli.xlsx']
      startVal [time (s)] = 0
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    TextComponent textWelcome
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Welkom!

        In dit onderzoek ga je steeds een zin lezen en dan een vraag beantwoorden. Je ziet de hele zin niet in één keer. Er verschijnt steeds een nieuw stukje als je op de spatiebalk drukt.

        We gaan eerst even oefenen.

        Druk op de spatiebalk om verder te gaan.
    KeyboardComponent keyWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine question
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    CodeComponent questionCode
      Code Type = Auto->JS
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      Begin Experiment:
        def setCorrKey(index):
            if index == 0:
                corrKey = 'a'
            elif index == 1:
                corrKey = 'b'
            elif index == 2:
                corrKey = 'c'
            return corrKey

        def getParticipantAnswer(key,ansList):
            # use input key to select chosen sentence
            if key == 'a':
                answer = ansList[0]
            elif key == 'b':
                answer = ansList[1]
            elif key == 'c':
                answer = ansList[2]

            # use chosen sentence to select sentence type
            if answer == meaning_idiomatic:
                answer = "idiomatic"
            if answer == meaning_distractor:
                answer = "distractor"
            if answer == meaning_literal:
                answer = "literal"
            return answer
      Begin Routine:
        # empty buffer
        event.clearEvents()

        # randomize multiple choice answer positions
        answers = [meaning_idiomatic,meaning_literal,meaning_distractor]
        shuffle(answers)

        # set answers for display in correct order
        ans1 = answers[0]
        ans2 = answers[1]
        ans3 = answers[2]

        # get index of correct answer
        if stimType == "experimental" or stimType == "practice_e":
            correct = answers.index(meaning_idiomatic)
        elif stimType == "filler" or stimType == "practice_f":
            correct = answers.index(meaning_literal)

        # set correct answer key
        corrKey = setCorrKey(correct)
      Each Frame:
        # evaluate correctness of given response
        theseKeys = event.getKeys(['a','b','c','escape'])
        n = len(theseKeys)
        i = 0

        # action on keypress
        while n > i:
            if theseKeys[i] == "escape":
                # break out of experiment when escape is pressed
                quit()
                break
            else:
                participantAnswer = getParticipantAnswer(theseKeys[i],answers)
                if corrKey == theseKeys[i]:
                    questionCorrect = 1
                else:
                    questionCorrect = 0
                thisExp.addData("questionCorrect", questionCorrect)
                thisExp.addData("participantAnswer", participantAnswer)
                thisExp.nextEntry()
                continueRoutine=False
                i += 1
    TextComponent questionText
      letterHeight = 0.05
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $'***** Wat betekent deze zin? *****\n\n\n(a) ' + ans1 + '\n\n(b) ' + ans2 + '\n\n(c) ' + ans3 + '\n\n\nKies je antwoord met (a), (b) of (c)'
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    KeyboardComponent questionKey
      allowedKeys [set every repeat] = 'a','b','c'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine start
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    TextComponent textStart
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Goed gedaan!

        Nu je weet hoe het werkt, gaan we echt beginnen.

        Veel succes!

        Druk op de spatiebalk om verder te gaan
    KeyboardComponent keyStart
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent alignStart
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        textStart.alignText= 'center'
      Begin JS Experiment:
        // Code component set to Both
        textStart.setAlignHoriz('center')
  Routine end
    CodeComponent codeEnd
      Code Type = Auto->JS
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      Begin Routine:
        // Disable downloading results to browser
        psychoJS._saveResults = 0;

        // Generate filename for results
        let filename = expInfo["group"] + "_group_participant_" + expInfo["participant"] + "_" + psychoJS._experiment._experimentName + '_' + psychoJS._experiment._datetime + '.csv';

        // Extract data object from experiment
        let dataObj = psychoJS._experiment._trialsData;

        // Convert data object to CSV
        let data = [Object.keys(dataObj[0])].concat(dataObj).map(it => {
                return Object.values(it).toString()
            }).join('\n')

        // Send data to OSF via DataPipe
        console.log('Saving data...');
        fetch('https://pipe.jspsych.org/api/data', {
            method: "POST",
            headers: {
                'Content-Type': 'application/json',
                Accept: "*/*",
            },
            body: JSON.stringify({
                experimentID: 'mTRdgdPYEvkD',
                filename: filename,
                data: data,
            }),
        }).then(response => response.json()).then(data => {
            // Log response and force experiment end
            console.log(data);
            quitPsychoJS();
        })
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    TextComponent textEnd
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        We zijn bij het einde van het experiment.

        Bedankt voor het meedoen!

        De data wordt nu opgeslagen. Nog even wachten...
  Routine pause
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    CodeComponent pauseCode
      Code Type = Auto->JS
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      Begin Experiment:
        def multiples(value, length):
            return [*range(value, length*value+1, value)]

        breakN = 0
        breakOn = multiples(8,4)
      Begin Routine:
        if trials.thisN+1 in breakOn[:-1]:
            continueRoutine = True
            breakN += 1
        else:
            continueRoutine = False
    TextComponent pauseText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Dit was blok %s van de %s.\n\n\nNeem even pauze en druk dan op de spatiebalk om verder te gaan.'%(breakN,len(breakOn))
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    KeyboardComponent pauseKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fix
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    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine feedback
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    CodeComponent fb_code
      Code Type = Auto->JS
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      Begin Routine:
        # Check if the key press was correct or not.
        # This routine will need to follow another routine with a
        # key response component in it called "key_resp"
        # and the "store correct" option enabled.
        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        # If a key response component has been added and feedback is functioning.
        # 1. remove lines 12, 13, 15, 22 and 23.
        # 2. dedent lines 16 to 21

        fb_text = 'no key_resp component found - look at the Std out window for info'
        fb_col = 'black'

        try:
            if questionCorrect:
                fb_text = 'O'
                fb_col = 'green'
            else:
                fb_text = 'X'
                fb_col = 'red'
        except:
            print('Make sure that you have:\n1. a routine with a keyboard component in it called "key_resp"\n 2. In the key_Resp component in the "data" tab select "Store Correct".\n in the "Correct answer" field use "$corrAns" (where corrAns is a column header in your conditions file indicating the correct key press')
    TextComponent fb
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb_text
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Flow
  Routine welcome
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = resources/practiceStimuli.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'stimID': 'a', 'stimType': 'practice_e', 'transparent': 1, 'idiom': 'Laura schopt het ver.', 'meaning_idiomatic': 'Laura is succesvol.', 'meaning_literal': 'Laura schopt iets ver weg.', 'meaning_distractor': 'Laura overtreedt een regel.'},
      {'stimID': 'b', 'stimType': 'practice_e', 'transparent': 0, 'idiom': 'Tom heeft veel in zijn mars.', 'meaning_idiomatic': 'Tom kan en weet veel dingen.', 'meaning_literal': 'Tom kan heel ver wandelen.', 'meaning_distractor': 'Tom praat veel.'},
      {'stimID': 'c', 'stimType': 'practice_f', 'transparent': 1, 'idiom': 'Hannah staat met haar mond vol brood.', 'meaning_idiomatic': 'Hannah weet niet wat ze moet zeggen.', 'meaning_literal': 'Hannah heeft haar mond vol met brood.', 'meaning_distractor': 'Hannah is gulzig en eet veel.'},
      {'stimID': 'd', 'stimType': 'practice_f', 'transparent': 0, 'idiom': 'Leon zit in de bus.', 'meaning_idiomatic': 'Leon is somber.', 'meaning_literal': 'Leon is onderweg met de bus.', 'meaning_distractor': 'Leon wacht rustig af wat er gaat gebeuren.'}]
    Routine fix
    Routine trial
    Routine question
    Routine feedback
  LoopTerminator practice
  Routine start
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = resources/idiomStimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimID': 1, 'stimType': 'experimental', 'transparent': 1, 'idiom': 'Mark laat zijn gezicht zien.', 'meaning_idiomatic': 'Mark is even aanwezig.', 'meaning_literal': 'Mark laat zijn gezicht aan iemand zien.', 'meaning_distractor': 'Mark toont zijn echte emoties.'},
      {'stimID': 2, 'stimType': 'experimental', 'transparent': 1, 'idiom': 'Stijn loopt me voor de voeten.', 'meaning_idiomatic': 'Stijn hindert mij.', 'meaning_literal': 'Stijn loopt voor mij.', 'meaning_distractor': 'Stijn neemt de leiding.'},
      {'stimID': 3, 'stimType': 'experimental', 'transparent': 1, 'idiom': 'Noah zet er een punt achter.', 'meaning_idiomatic': 'Noah stopt ermee.', 'meaning_literal': 'Noah zet een punt aan het eind van de zin.', 'meaning_distractor': 'Noah let goed op de details.'},
      {'stimID': 4, 'stimType': 'experimental', 'transparent': 1, 'idiom': 'Pieter gaf Daan een trap na.', 'meaning_idiomatic': 'Pieter kwetste Daan nog eens extra.', 'meaning_literal': 'Pieter gaf Daan nog een schop.', 'meaning_distractor': 'Pieter motiveerde Daan nog eens extra.'},
      {'stimID': 5, 'stimType': 'experimental', 'transparent': 1, 'idiom': 'Anna neemt te veel hooi op haar vork.', 'meaning_idiomatic': 'Anna wil meer werk doen dan ze aankan.', 'meaning_literal': 'Anna schept te veel hooi tegelijk op.', 'meaning_distractor': 'Anna schept te veel eten op haar bord.'}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
    Routine fix
    Routine trial
    Routine question
    Routine pause
  LoopTerminator trials
  Routine end
